CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'Overall - segmentation, first LAP parameters, gap score, gap temporal, merge score are optimized']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif)

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^092921_MCC13_RFP_1_s(?P<Site>.*)_t(?P<Time>.*).TIF
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "tracks")
    Name to assign these images:masks
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (directory doesnot contain "tracks")
    Name to assign these images:Orig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Site

ImageMath:[module_num:5|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enabled:False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
    Operation:None
    Raise the power of the result by:0.3
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Orig
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:6|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enabled:False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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):15,45
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:11
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.1
    Upper outlier fraction:0
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:1
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
MeasureObjectSizeShape:[module_num:7|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enabled:False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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:8|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notes:['Increased compactness filter limit']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enabled:False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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilterNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:90
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:3

ExpandOrShrinkObjects:[module_num:9|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enabled:False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
    Select the input objects:FilterNuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Add partial dividing lines between objects
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
Smooth:[module_num:10|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enabled:False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
    Select the input image:ImageAfterMath
    Name the output image:FilteredImage
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
RescaleIntensity:[module_num:11|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enabled:False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
    Select the input image:FilteredImage
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:12|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
    Select the input image:masks
    Name the output object:ShrunkenNuclei
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:ShrunkenNuclei
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:Orig
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    Regularization factor:0.03
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.28,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:14|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
    Select the larger identified objects:IdentifySecondaryObjects
    Select the smaller identified objects:ShrunkenNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:Orig, masks
    Select objects to measure:Cytoplasm, ShrunkenNuclei

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Cytoplasm, ShrunkenNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

SaveImages:[module_num:17|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:RescaleIntensity
    Select method for constructing file names:From image filename
    Select image name for file prefix:Orig
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/test/output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:18|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
    Select the input objects:Cytoplasm
    Name the output image:CytoMasks
    Select the color format:uint16
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:CytoMasks
    Select method for constructing file names:From image filename
    Select image name for file prefix:Orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:-cyto-mask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Documents/Hatch Lab/Automated analysis/ne-rupture/preprocessors/cellprofiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cytoplasm|AreaShape_MajorAxisLength,Cytoplasm|AreaShape_Center_Y,Cytoplasm|AreaShape_Center_X,Cytoplasm|AreaShape_Area,Cytoplasm|Intensity_MeanIntensity_Orig,Cytoplasm|Intensity_StdIntensity_Orig,Cytoplasm|Intensity_MinIntensity_Orig,Cytoplasm|Intensity_MaxIntensity_Orig,Cytoplasm|Intensity_MedianIntensity_Orig,Cytoplasm|Intensity_IntegratedIntensity_Orig,Cytoplasm|Location_MaxIntensity_Z_Orig,Cytoplasm|Location_MaxIntensity_Y_Orig,Cytoplasm|Location_MaxIntensity_X_Orig,Cytoplasm|Location_CenterMassIntensity_X_Orig,Cytoplasm|Location_CenterMassIntensity_Y_Orig,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:Yes
    Data to export:ShrunkenNuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:21|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MCC13_Rupture_1
    Output file location:Default Output Folder|Desktop/test/output
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:MCC13_Rupture_1.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MCC13_Rupture_Full
    Which objects should be used for locations?:ShrunkenNuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:rupture
    Export object relationships?:No
    Overwrite without warning?:Data and schema
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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